PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = Quick_EstimatorSlider_template
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Routines
  Routine trial
    ImageComponent Estimate
      image = RedPolkaVec.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = .75
      stopVal [duration (s)] = 2.00
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    TextComponent Fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text = +
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 2.75
      styles = ('slider',)
      ticks = (1,100)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
