PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u'1'}
  Units = use prefs
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  Save log file = False
  Save wide csv file = False
  expName = GridFillWorking
  Screen = 1
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Routines
  Routine Background
    PolygonComponent polygon_5
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (1, 1)
      fillColor = $[1,1,1]
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  Routine Fill
    PolygonComponent background
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (1, 1)
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
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    PolygonComponent zerozero
      pos = (-0.4, 0.4)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1.000,-1.000,-1.000]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [time (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent zeroone
      pos = (-0.2, 0.4)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent zerotwo
      pos = (0, 0.4)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent zerothree
      pos = (0.2, 0.4)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent zerofour
      pos = (0.4, 0.4)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent onezero
      pos = (-0.4, 0.2)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent oneone
      pos = (-0.2, 0.2)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent onetwo
      pos = (0, 0.2)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent onethree
      pos = (0.2, 0.2)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent onefour
      pos = (0.4, 0.2)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent twozero
      pos = (-0.4, 0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent twoone
      pos = (-0.2, 0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent twotwo
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent twothree
      pos = (0.2, 0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent twofour
      pos = (0.4, 0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent threezero
      pos = (-0.4, -0.2)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent threeone
      pos = (-0.2, -0.2)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent threetwo
      pos = (0, -0.2)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent threethree
      pos = (0.2, -0.2)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent threefour
      pos = (0.4, -0.2)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent fourzero
      pos = (-0.4, -0.4)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent fourone
      pos = (-0.2, -0.4)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent fourtwo
      pos = (0, -0.4)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent fourthree
      pos = (0.2, -0.4)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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    PolygonComponent fourfour
      pos = (0.4, -0.4)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.2, 0.2)
      fillColor = $[-1,-1,-1]
      opacity [set every repeat] = np.random.randint(2)
      stopVal [duration (s)] = 0.8
      lineColor = $[-1,-1,-1]
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Fill
  LoopTerminator trials
