PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = LineAttempt5
  Screen = 1
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Routines
  Routine numStim
    TextComponent text
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text [set every repeat]:
        Any text

        including line breaks
  Routine trial
    RatingScaleComponent rating
      labels = 0,1000
      pos = 0, -0.4
      high = 1000
      startVal [time (s)] = 0.5
      size = 1.0
      forceEndRoutine = True
      low = 0
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  Routine Intro
    TextComponent text_2
      text = Please locate the following numbers on the line.
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine numStim
    Routine trial
  LoopTerminator trials
