PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = Quick_Comparison_template
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Routines
  Routine trial
    ImageComponent Compare
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = .75
      stopVal [duration (s)] = 2.00
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    TextComponent Fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
      text = +
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    KeyboardComponent Response
      allowedKeys = 'y','n','left','right'
      correctAns = $Corr
      forceEndRoutine = True
      startVal [time (s)] = 2.75
      stopVal [duration (s)] = 5.00
      storeCorrect = True
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Flow
  Routine trial
